# filename: model.bngl
# date of last edit: 25-Jul-2017
# authors: Chylek LA, Mitra E, Hlavacek WS (Los Alamos National Laboratory)
# software compatibility: RuleBender (version 2.1.0.8), 
# BioNetGen (version 2.2.6)

begin model

begin parameters

# The following parameters were fit to experimental degranulation data using
# BioNetFit 1.0
# For more information, see the BioNetFit configuration file model_fit.conf


# system size scaling factor (>0)
f 1 # cells per reaction compartment

# Avogadro constant
NA 6.02214e23 # molecules per mol

# time unit conversion factor
T 60 # s per min

# channel volume in microfluidic device
Vchannel 500e-9 # L per channel (500 nL)

# number of cells per channel
Nchannel 1000 # cells per channel

# volume of extracellular fluid
Vecf=f*(Vchannel/Nchannel) # L per cell (500 pL/cell)

# cytosolic volume of an RBL-2H3 cell
# This estimate corresponds to the volume of a sphere with a diameter of 
# 17.9 microns.
Vcyt f*3e-12 # L per cell (3 pL/cell)

# multivalent antigen abundance in medium at condition 0 
Ag_tot_0 0 # copies per cell (cpc)

# multivalent antigen abundance in medium at condition 1 
Ag_conc1 10e-9 # M (10 nM)
Ag_tot_1=Ag_conc1*(NA*Vecf) # cpc

# antigen receptor abundance
R_tot f*3e5 # cpc (1 nM)

# Syk abundance
Syk_tot f*3e5 # cpc (0.166 uM)

# Ship1 abundance
Ship1_tot f*3e5 # cpc (0.166 uM)

# rate constant for antigen capture
kon 1e7*T/(NA*Vecf) # /M/s converted to /cpc/min
# We assume a diffusion-limited value of 1e7 /M/s

# rate constant for antigen release
koff koff__FREE*T # 4.46e-3 /s converted to 0.268 /min

# rate constant for pseudo first-order phosphorylation of antigen-engaged
# receptor
kase kase__FREE*T # 3.76 /s converted to 2.25e+2 /min

# rate constant for pseuedo first-order dephosphorylation of phosphorylated
# receptor
pase pase__FREE*T # 1.60e-1 /s converted to 9.6 /min

kp_Syk kp_Syk__FREE*T/(NA*Vcyt) # 2.65e+5 /M/s converted to 8.80e-6 /cpc/min
km_Syk km_Syk__FREE*T # 2.88e-1 /s converted to 17.2 /min

kp_Ship1 kp_Ship1__FREE*T/(NA*Vcyt) # 1.11e+4 /M/s converted to
# 3.68e-7 /cpc/min
km_Ship1 km_Ship1__FREE*T #  1.43e-3 /s converted to 8.58e-2 /min 

ksynth1 ksynth1__FREE*T # 1.85e-2 /s converted to 1.11 /min
kdeg1 1e7*T/(NA*Vcyt) # /M/s converted to /cpc/min;
# We assume a diffusion-limited value of 1e7 /M/s

# Rate of basal degradation of PIP3 and/or IP3
kpten kpten__FREE*T # 9.95e-3 /s converted to 0.597 /min 


H_tot 1e6 # cpc

kdegran kdegran__FREE*T/(NA*Vcyt) # 1.89e+5 /M/s converted to 6.27e-6/cpc/min

# rate constant for degradation of X 
# (in one step, including ubiquitination and proteosomal degradation)
kdegX kdegX__FREE*T # 3.19e-4 /s converted to 1.91e-2 /min


k_Xon k_Xon__FREE*T/(NA*Vcyt) # 9.40e+4 /M/s converted to 3.12e-6 /cpc/min
k_Xoff k_Xoff__FREE*T # 1.91e-6 /s converted to 1.15e-4 /min

kp_x kp_x__FREE*T/(NA*Vcyt) # 7.81e+5 /M/s converted to 2.59e-5 /cpc/min
km_x km_x__FREE*T # 1.12e-1 /s converted to 7.26 /min

# abundance of hypothetical Ship1 cofactor X
X_tot=X_tot__FREE*Ship1_tot # 6.13 times the Ship1 concentration, converted
# to 1.84e6 cpc

end parameters

begin molecule types

# antigen (DNP-conjugated BSA)
#  DNP: 2,4-dinitrophenyl groups
Ag(DNP) 

# antigen receptor (anti-DNP IgE bound to Fc&epsilon;RI)
#  IgE: anti-DNP IgE
#  Yb: tyrosine residues (0, unmodified; P, phosphorylated) 
#     in the &beta; chain ITAM of Fc&epsilon;RI
#  Yg: tyrosine residues (0, unmodified; P, phosphorylated)
# 	  in the &gamma; chain ITAMs of Fc&epsilon;RI    
R(IgE,Yb~0~P,Yg~0~P) 

# protein tyrosine kinase Syk
#  tSH2: tandem SH2 domains
Syk(tSH2)

# lipid phosphatase Ship1
#  SH2: Src homology 2 (SH2) domain
#  x: binding site for hypothethical Ship1 cofactor X
Ship1(SH2,x)

# hypothetical Ship1 cofactor X
#  s: Ship1 binding site (on, active; off, inactive)
X(s~on~off) 

# phosphatidylinositol (3,4,5)-trisphosphate
PIP3()


# &beta;-hexosaminidase
#  loc: location (in, inside granules; out, secreted/outside cell)
H(loc~in~out)

end molecule types

begin seed species

# initial conditions

# initial abundance of free antigen (in medium) per cell
# The $ prefix indicates that this abundance is to be held constant.
$Ag(DNP) Ag_tot_1

# initial abundance of free antigen receptor
R(IgE,Yb~0,Yg~0) R_tot

# initial abundance of (inactive) cytosolic Syk
Syk(tSH2) Syk_tot

# initial abundance of (inactive) cytosolic Ship1
Ship1(SH2,x) Ship1_tot

# initial abundance of PIP3
PIP3()	0

# initial abundance of &beta;-hexosaminidase (stored in cellular granules)
H(loc~in) H_tot

# initial abundance of inactive hypothetical Ship1 cofactor X
X(s~off) X_tot

end seed species

begin observables

# simulation outputs
# For speed, comment out observables unused in fitting

# Molecules Ag_total Ag() # This quantity may accumulate because free Ag
# abundance is held fixed.
# Molecules Ag_free Ag(DNP) # This quantity is held constant, except for
# adjustments in the actions block.
# Molecules R_bound R(IgE!+) # number of antigen-bound receptors per cell
# Molecules R_free R(IgE) # number of antigen-free receptors per cell
# Molecules RP R(Yg~P!?) # number of phosphorylated receptors per cell
# Molecules R0 R(Yg~0) # number of unphosphorylated receptors per cell
# Molecules actSyk Syk(tSH2!+) # number of Syk molecules recruited to antigen
# receptors
# Molecules actShip1 Ship1(SH2!+,x!+) # number of Ship1 molecules recruited to
# antigen receptors and bound to X
# Molecules Ship1_total Ship1() # total abundance of Ship1
# Molecules PIP3_total PIP3() # total abundance of PIP3
Molecules degranulation H(loc~out) # abundance of secreted &beta;-hexominadase
# (surrogate for secreted mediators of inflammation)
# Molecules Xall X() # total abundance of hypothetical Ship1 cofactor X
# Molecules X_on_free X(s~on) # abundance of free X in activated state
# Molecules X_on_free_or_bound X(s~on!?) # abundance of X (bound or free) in
# activated state
# Molecules XShip1 X(s~on!1).Ship1(x!1) # abundance of Ship1 bound to (activated)
# cofactor X

end observables

begin functions

# Cutoffs for what counts as "approximately equal"
degranulation_high() = degranulation + 4.2e4
degranulation_low() = degranulation - 4.2e4

end functions

begin reaction rules

# ligand-receptor binding
# As a simplification, we consider a one-step binding mechanism.
# Thus, the rate constants are effective parameters that reflect
# capture and release of (multivalent) antigen as well as the effects 
# of antigen-mediated receptor aggregation on the residence time of antigen
# on the cell surface. Recall that the antigen receptor is a long-lived 1:1
# complex of antigen-specific IgE and Fc&epsilon;RI, the high-affinity Fc
# receptor for IgE.
Ag(DNP)+R(IgE)<->Ag(DNP!1).R(IgE!1) kon,koff

# ligand-dependent receptor phosphorylation
# We assume that bound receptors are competent for (Lyn-mediated)
# phosphorylation of the tyrosines in &beta; and &gamma; ITAMs. 
# As a simplification, we assume that the &beta; and &gamma; sites are 
# phosphorylated simultaneously as part of a single process. 
# The effective rate constant for phosphorylation is assumed to capture
# associaton of Lyn with receptors and the relationship between the abundance
# of cell-associated antigen and the extent of antigen-mediated receptor
# crosslinking.
R(IgE!+,Yb~0,Yg~0)->R(IgE!+,Yb~P,Yg~P) kase

# receptor dephosphorylation
# # As a simplification, we assume that the &beta; and &gamma; sites are
# dephosphorylated simultaneously as part of a single process. 
# As an additional simplification, we consider a pseudo first-order mechanism. 
# Thus, the effective rate constant for phosphorylation can be viewed 
# as the Vmax/KM ratio for phosphatases. We expect phosphatase activity to be
# high.
R(Yb~P,Yg~P)->R(Yb~0,Yg~0) pase
 
# recruitment of Syk to the &gamma; subunit of the phosphorylated receptor
# As a simplification, we consider a one-step binding mechanism.
# We expect this simplification to be accurate even though the tandem 
# SH2 domains of Syk dock to a doubly phosphorylated &gamma; ITAM via a 
# two-step mechanism because isomerization reactions are expected to be fast.
R(Yg~P)+Syk(tSH2)<->R(Yg~P!1).Syk(tSH2!1) kp_Syk,km_Syk

# recruitment of Ship1 to the &beta; subunit of the phosphorylated receptor
# The SH2 domain Ship1 interacts with the phosphorylated &beta; ITAM.
R(Yb~P)+Ship1(SH2)<->R(Yb~P!1).Ship1(SH2!1) kp_Ship1,km_Ship1

# receptor-mediated activation of hypothetical Ship1 cofactor X
# As a simplification, we consider a pseudo second-order mechanism.
# The rate constant for activation of X can be viewed as the kcat/KM ratio for
# a receptor-associated kinase responsible for activating phosphorylation of X.
# Note that our choice to check the phosphorylation state of R(Yb) rather than
# R(Yg) is arbitrary, as within the simplifications of this model, the two
# sites are phosphorylated and dephosphorylated simultaneously. 
R(Yb~P!?)+X(s~off)->R(Yb~P!?)+X(s~on) k_Xon

# decativation of X
# As a simplification, we consider a pseudo first-order mechanism.
X(s~on)->X(s~off) k_Xoff

# activated Syk-dependent synthesis of PIP3
# PI3K is recruited to phosphorylated LAT, a key substrate of Syk and plasma
# membrane protein, and there generates PI(3,4,5)P3 from PI(4,5)P2.
# As a simplification, we assume that PI3K activity (and PIP3 generation) is
# proportional to the abundance of receptor-recruited Syk. Thus, we assume that
# the rate constant for PIP3 generation captures the relationship between Syk
# recruitment/activation and PI3K recruitment/activation enabled by
# Syk-mediated phosphorylation of LAT.
Syk(tSH2!+)->Syk(tSH2!+)+PIP3() ksynth1

# interaction of activated X with Ship1
# We assume that X-Ship1 interaction requires prior receptor-mediated
# activation of X. Thus, only X with a Ship1 binding site "s" in the "on" state
# is allowed to associate with Ship1.
X(s~on)+Ship1(x)<->X(s~on!1).Ship1(x!1) kp_x,km_x


# activated Ship1-dependent clearance of PIP3
# We assume that membrane-associated Ship1, when bound to both the receptor and
# a cofactor (X), is mainly responsible for clearance of PIP3. Ship1 catalyzes
# the conversion of PI(3,4,5)P3 to PI(3,4)P2.
Ship1(SH2!+,x!+)+PIP3()->Ship1(SH2!+,x!+) kdeg1

# clearance of PIP3
# PIP3 is degraded to PI(4,5)P2 by PTEN.
# We assume that all degradation of PIP3 can be simplified into a single
# pseudo first-order process.  
PIP3()->0 kpten


# Degradation of activated X
# We assume that activated X is subject to ubiquitination, followed by
# degradation in the proteosome
# We take this to occur via a pseudo first-order process
# X bound to Ship1 is also subject to proteosomal degradation, which is assumed
# to liberate Ship1.
# We assume that synthesis and degradation of *inactive* X are sufficiently
# slow to not be relevant on the time scales studied.
X(s~on)->0 kdegX
X(s~on!1).Ship1(x!1)->Ship1(x) kdegX

# Degranulation due to the presence of PIP3
# PIP3 serves as a PLC&gamma; substrate, leading to the production of IP3,
# stimulating store-operated calcium release followed by degranulation
# We assume this occurs as a pseudo second order process. 
PIP3()+H(loc~in)->PIP3()+H(loc~out) kdegran

end reaction rules

end model

begin actions

# The command below instructs BioNetGen to derive a reaction network from the 
# model's rules.
# The output is sent to a file that has a .net filename extension.
# The .net file can be further processed to generate the ordinary differential
# equations corresponding to the reaction network and the rate laws associated
# with the model's rules.
generate_network({overwrite=>1})

# The commands below illustrate how we simulated 
# 1) an initial period of multivalent antigen-stimulated IgE receptor
# signaling,
# 2) an intermediate period of monovalent antigen-induced IgE receptor
# signaling quiescence, and
# 3) a second and final period of multivalent antigen-stimulated IgE receptor
# signaling.

# For the purposes of fitting to experimental data, we repeat the series of 3
# simulations for each time delay that was tested experimentally
# For each one, a .exp file was saved containing the appropriate experimental
# data point from Fig. 4
# BioNetFit was used to fit the model to the .exp files.

# first 5-min period of multivalent antigen stimulation
setConcentration("Ag(DNP)","Ag_tot_1") 
simulate({suffix=>"p1_5",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Remember these concentrations, so we can go back for each interval tested
saveConcentrations() 

# ACTIONS HERE: Paste one or more copies of action_clip.bngl below
# Interval of 4 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_4",method=>"ode",t_end=>4,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_4",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 8 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_8",method=>"ode",t_end=>8,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_8",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 11 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_11",method=>"ode",t_end=>11,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_11",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 15 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_15",method=>"ode",t_end=>15,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_15",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 19 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_19",method=>"ode",t_end=>19,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_19",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 22 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_22",method=>"ode",t_end=>22,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_22",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 26 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_26",method=>"ode",t_end=>26,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_26",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 30 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_30",method=>"ode",t_end=>30,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_30",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 34 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_34",method=>"ode",t_end=>34,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_34",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 38 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_38",method=>"ode",t_end=>38,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_38",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 41 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_41",method=>"ode",t_end=>41,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_41",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 45 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_45",method=>"ode",t_end=>45,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_45",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 49 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_49",method=>"ode",t_end=>49,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_49",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 52 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_52",method=>"ode",t_end=>52,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_52",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 56 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_56",method=>"ode",t_end=>56,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_56",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 60 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_60",method=>"ode",t_end=>60,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_60",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 64 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_64",method=>"ode",t_end=>64,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_64",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 68 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_68",method=>"ode",t_end=>68,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_68",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 71 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_71",method=>"ode",t_end=>71,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_71",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 75 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_75",method=>"ode",t_end=>75,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_75",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 79 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_79",method=>"ode",t_end=>79,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_79",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 82 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_82",method=>"ode",t_end=>82,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_82",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 86 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_86",method=>"ode",t_end=>86,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_86",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 90 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_90",method=>"ode",t_end=>90,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_90",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 94 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_94",method=>"ode",t_end=>94,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_94",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 98 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_98",method=>"ode",t_end=>98,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_98",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 101 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_101",method=>"ode",t_end=>101,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_101",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 105 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_105",method=>"ode",t_end=>105,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_105",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 109 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_109",method=>"ode",t_end=>109,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_109",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 112 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_112",method=>"ode",t_end=>112,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_112",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 116 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_116",method=>"ode",t_end=>116,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_116",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 120 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_120",method=>"ode",t_end=>120,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_120",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 124 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_124",method=>"ode",t_end=>124,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_124",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 128 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_128",method=>"ode",t_end=>128,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_128",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 131 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_131",method=>"ode",t_end=>131,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_131",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 135 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_135",method=>"ode",t_end=>135,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_135",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 139 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_139",method=>"ode",t_end=>139,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_139",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 142 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_142",method=>"ode",t_end=>142,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_142",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 146 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_146",method=>"ode",t_end=>146,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_146",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 150 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_150",method=>"ode",t_end=>150,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_150",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 154 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_154",method=>"ode",t_end=>154,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_154",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 158 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_158",method=>"ode",t_end=>158,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_158",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 161 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_161",method=>"ode",t_end=>161,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_161",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 165 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_165",method=>"ode",t_end=>165,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_165",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 169 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_169",method=>"ode",t_end=>169,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_169",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 172 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_172",method=>"ode",t_end=>172,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_172",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 176 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_176",method=>"ode",t_end=>176,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_176",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 180 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_180",method=>"ode",t_end=>180,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_180",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 184 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_184",method=>"ode",t_end=>184,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_184",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 188 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_188",method=>"ode",t_end=>188,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_188",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 191 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_191",method=>"ode",t_end=>191,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_191",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 195 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_195",method=>"ode",t_end=>195,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_195",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 199 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_199",method=>"ode",t_end=>199,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_199",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 202 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_202",method=>"ode",t_end=>202,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_202",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 206 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_206",method=>"ode",t_end=>206,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_206",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 210 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_210",method=>"ode",t_end=>210,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_210",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 214 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_214",method=>"ode",t_end=>214,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_214",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 218 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_218",method=>"ode",t_end=>218,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_218",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 221 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_221",method=>"ode",t_end=>221,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_221",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 225 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_225",method=>"ode",t_end=>225,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_225",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 229 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_229",method=>"ode",t_end=>229,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_229",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 232 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_232",method=>"ode",t_end=>232,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_232",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 236 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_236",method=>"ode",t_end=>236,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_236",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})
# Interval of 240 min
resetConcentrations()
setConcentration("Ag(DNP)","Ag_tot_0")
simulate({suffix=>"p2_240",method=>"ode",t_end=>240,n_steps=>1})
setConcentration("Ag(DNP)","Ag_tot_1")
setConcentration("H(loc~out)",0) 
simulate({suffix=>"p3_240",method=>"ode",t_end=>5,n_steps=>50,print_functions=>1})

end actions
